opentrons/protocol-designer 3.0.7
schemaVersion: 3
protocolName: BSA_PierceAssay_Calibration
robot: {model: OT-2 Standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 0.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipettes:
  p300_single: {mount: left}
  p300_multi: {mount: right}
labware:
  Trash: {definitionId: opentrons/opentrons_1_trash_1100ml_fixed/1, slot: 12}
  Opentrons 96 Tip Rack 300 µL: {definitionId: opentrons/opentrons_96_tiprack_300ul/1, slot: 1}
  Reagent Plate: {definitionId: opentrons/corning_96_wellplate_360ul_flat/1, slot: 2}
  Tube Rack 1: {definitionId: opentrons/opentrons_24_tuberack_eppendorf_2ml_safelock_snapcap/1, slot: 3}
  Reagent Reservoir: {definitionId: opentrons/nest_12_reservoir_15ml/1, slot: 4}
pipetteTiprackAssignments:
  p300_single: opentrons/opentrons_96_tiprack_300ul/1
  p300_multi: opentrons/opentrons_96_tiprack_300ul/1
ingredients:
  - PBS_Buffer
  - BSA (1000 ug/mL)
  - Pierce_Reagent
ingredLocations:
  Tube Rack 1:
    PBS_Buffer {volume: 1500}: A1
    BSA (1000 ug/mL) {volume: 500}: B1
  Reagent Reservoir:
    BSA (1000 ug/mL) {volume: 10000}: A1
savedStepForms:
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single
  volume: 150
  path: single
  changeTip: once
  aspirate_labware: Tube Rack 1
  aspirate_wells: A1
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  aspirate_mmFromBottom: 1
  dispense_labware: Reagent Plate
  dispense_wells: B1-H1
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single
  volume: 300
  path: single
  changeTip: always
  aspirate_labware: Tube Rack 1
  aspirate_wells: B1
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  aspirate_mmFromBottom: 1
  dispense_labware: Reagent Plate
  dispense_wells: A1
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single
  volume: 150
  path: single
  changeTip: always
  aspirate_labware: Reagent Plate
  aspirate_wells: A1
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  aspirate_mmFromBottom: 1
  dispense_labware: Reagent Plate
  dispense_wells: B1
  dispense_mix_checkbox: true
  dispense_mix_times: 5
  dispense_mix_volume: 100
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single
  volume: 150
  path: single
  changeTip: never
  aspirate_labware: Reagent Plate
  aspirate_wells: B1
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  aspirate_mmFromBottom: 1
  dispense_labware: Reagent Plate
  dispense_wells: C1
  dispense_mix_checkbox: true
  dispense_mix_times: 5
  dispense_mix_volume: 100
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single
  volume: 150
  path: single
  changeTip: never
  aspirate_labware: Reagent Plate
  aspirate_wells: C1
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  aspirate_mmFromBottom: 1
  dispense_labware: Reagent Plate
  dispense_wells: D1
  dispense_mix_checkbox: true
  dispense_mix_times: 5
  dispense_mix_volume: 100
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single
  volume: 150
  path: single
  changeTip: never
  aspirate_labware: Reagent Plate
  aspirate_wells: D1
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  aspirate_mmFromBottom: 1
  dispense_labware: Reagent Plate
  dispense_wells: E1
  dispense_mix_checkbox: true
  dispense_mix_times: 5
  dispense_mix_volume: 100
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single
  volume: 150
  path: single
  changeTip: never
  aspirate_labware: Reagent Plate
  aspirate_wells: E1
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  aspirate_mmFromBottom: 1
  dispense_labware: Reagent Plate
  dispense_wells: F1
  dispense_mix_checkbox: true
  dispense_mix_times: 5
  dispense_mix_volume: 100
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single
  volume: 150
  path: single
  changeTip: never
  aspirate_labware: Reagent Plate
  aspirate_wells: F1
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  aspirate_mmFromBottom: 1
  dispense_labware: Reagent Plate
  dispense_wells: G1
  dispense_mix_checkbox: true
  dispense_mix_times: 5
  dispense_mix_volume: 100
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single
  volume: 150
  path: single
  changeTip: never
  aspirate_labware: Reagent Plate
  aspirate_wells: G1
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  aspirate_mmFromBottom: 1
  dispense_labware: Trash
  dispense_wells: A1
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi
  volume: 30
  path: multiDispense
  changeTip: once
  aspirate_labware: Reagent Plate
  aspirate_wells: A1
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  aspirate_mmFromBottom: 1
  dispense_labware: Reagent Plate
  dispense_wells: A2-A4
  dispense_mmFromBottom: 0.5
  disposalVolume_checkbox: true
  disposalVolume_volume: 30
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi
  volume: 270
  path: single
  changeTip: always
  aspirate_labware: Reagent Reservoir
  aspirate_wells: A1
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  aspirate_mmFromBottom: 1
  dispense_labware: Reagent Plate
  dispense_wells: A2-A4
  dispense_mix_checkbox: true
  dispense_mix_times: 5
  dispense_mix_volume: 150
  dispense_mmFromBottom: 0.5
labwareDefinitions:
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commands:
- pickUpTip: {pipette: p300_single, labware: Opentrons 96 Tip Rack 300 µL, well: A1}
- aspirate: {pipette: p300_single, volume: 150, labware: Tube Rack 1, well: A1, offsetFromBottomMm: 1, flowRate: 150}
- dispense: {pipette: p300_single, volume: 150, labware: Reagent Plate, well: B1, offsetFromBottomMm: 0.5, flowRate: 300}
- aspirate: {pipette: p300_single, volume: 150, labware: Tube Rack 1, well: A1, offsetFromBottomMm: 1, flowRate: 150}
- dispense: {pipette: p300_single, volume: 150, labware: Reagent Plate, well: C1, offsetFromBottomMm: 0.5, flowRate: 300}
- aspirate: {pipette: p300_single, volume: 150, labware: Tube Rack 1, well: A1, offsetFromBottomMm: 1, flowRate: 150}
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