opentrons/protocol-designer 3.0.7
schemaVersion: 3
protocolName: Sample_PierceAssay_Preparation
robot: {model: OT-2 Standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 0.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipettes:
  p300_single: {mount: left}
  p300_multi: {mount: right}
labware:
  Trash: {definitionId: opentrons/opentrons_1_trash_1100ml_fixed/1, slot: 12}
  Opentrons 96 Tip Rack 300 µL (slot 3): {definitionId: opentrons/opentrons_96_tiprack_300ul/1, slot: 3}
  Plate 1: {definitionId: opentrons/corning_96_wellplate_360ul_flat/1, slot: 1}
  Sample Tubes: {definitionId: opentrons/opentrons_24_tuberack_eppendorf_2ml_safelock_snapcap_acrylic/1, slot: 2}
  Reagent Reservoir: {definitionId: opentrons/nest_12_reservoir_15ml/1, slot: 4}
  Opentrons 96 Tip Rack 300 µL (slot 6): {definitionId: opentrons/opentrons_96_tiprack_300ul/1, slot: 6}
pipetteTiprackAssignments:
  p300_single: opentrons/opentrons_96_tiprack_300ul/1
  p300_multi: opentrons/opentrons_96_tiprack_300ul/1
ingredients:
  - Process Sample
  - Pierce Reagent
ingredLocations:
  Sample Tubes:
    Process Sample {volume: 2000}: A1-D1, A2-D2, A3-D3, A4-D4, A5-D5, A6-D6
  Reagent Reservoir:
    Pierce Reagent {volume: 8000}: A1-A3
savedStepForms:
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single
  volume: 150
  path: single
  changeTip: always
  aspirate_labware: Sample Tubes
  aspirate_wells: A1-D1, A2-D2, A3-D3, A4-D4, A5-D5, A6-D6
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  aspirate_mmFromBottom: 1
  dispense_labware: Plate 1
  dispense_wells: A1-H1, A5-H5, A9-H9
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi
  volume: 30
  path: multiDispense
  changeTip: always
  aspirate_labware: Plate 1
  aspirate_wells: A1
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  aspirate_mmFromBottom: 1
  dispense_labware: Plate 1
  dispense_wells: A2-A4
  dispense_mmFromBottom: 0.5
  disposalVolume_checkbox: true
  disposalVolume_volume: 30
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi
  volume: 30
  path: multiDispense
  changeTip: always
  aspirate_labware: Plate 1
  aspirate_wells: A5
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  aspirate_mmFromBottom: 1
  dispense_labware: Plate 1
  dispense_wells: A6-A8
  dispense_mmFromBottom: 0.5
  disposalVolume_checkbox: true
  disposalVolume_volume: 30
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi
  volume: 30
  path: multiDispense
  changeTip: always
  aspirate_labware: Plate 1
  aspirate_wells: A9
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  aspirate_mmFromBottom: 1
  dispense_labware: Plate 1
  dispense_wells: A10-A12
  dispense_mmFromBottom: 0.5
  disposalVolume_checkbox: true
  disposalVolume_volume: 30
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi
  volume: 270
  path: single
  changeTip: always
  aspirate_labware: Reagent Reservoir
  aspirate_wells: A1
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  aspirate_mmFromBottom: 1
  dispense_labware: Plate 1
  dispense_wells: A2-A4
  dispense_mix_checkbox: true
  dispense_mix_times: 5
  dispense_mix_volume: 150
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi
  volume: 270
  path: single
  changeTip: always
  aspirate_labware: Reagent Reservoir
  aspirate_wells: A2
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  aspirate_mmFromBottom: 1
  dispense_labware: Plate 1
  dispense_wells: A6-A8
  dispense_mix_checkbox: true
  dispense_mix_times: 5
  dispense_mix_volume: 150
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi
  volume: 270
  path: single
  changeTip: always
  aspirate_labware: Reagent Reservoir
  aspirate_wells: A3
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  aspirate_mmFromBottom: 1
  dispense_labware: Plate 1
  dispense_wells: A10-A12
  dispense_mix_checkbox: true
  dispense_mix_times: 5
  dispense_mix_volume: 150
  dispense_mmFromBottom: 0.5
labwareDefinitions:
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commands:
- pickUpTip: {pipette: p300_single, labware: Opentrons 96 Tip Rack 300 µL (slot 3), well: A1}
- aspirate: {pipette: p300_single, volume: 150, labware: Sample Tubes, well: A1, offsetFromBottomMm: 1, flowRate: 150}
- dispense: {pipette: p300_single, volume: 150, labware: Plate 1, well: A1, offsetFromBottomMm: 0.5, flowRate: 300}
- dropTip: {pipette: p300_single, labware: Trash, well: A1}
- pickUpTip: {pipette: p300_single, labware: Opentrons 96 Tip Rack 300 µL (slot 3), well: B1}
- aspirate: {pipette: p300_single, volume: 150, labware: Sample Tubes, well: B1, offsetFromBottomMm: 1, flowRate: 150}
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